PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = pygame
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = noise_study
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    PolygonComponent target
      fillColor = $(-1.0000, 0.0039, -1.0000)
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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    KeyboardComponent resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
      store = first key
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    CodeComponent sound_control
      Code Type = Auto->JS
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      Begin Experiment:
        from pygame import mixer
        # Force 2 channels (Stereo) to fix the crash
        mixer.init(frequency=44100, size=-16, channels=2, buffer=512)
        # Load your sound file manually
        my_noise_sound = mixer.Sound('cafe_noise.wav')
      Begin Routine:
        if volume == 1:
            my_noise_sound.set_volume(1.0)
            my_noise_sound.play()
      End Routine:
        my_noise_sound.stop()
  Routine instructions
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    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Press the SPACEBAR as fast as you can when the green circle appears.
        Press any key to start.
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condition_name': 'Silence', 'sound_file': 'cafe_noise.wav', 'volume': 0},
      {'condition_name': 'Noise', 'sound_file': 'cafe_noise.wav', 'volume': 1},
      {'condition_name': 'Silence', 'sound_file': 'cafe_noise.wav', 'volume': 0},
      {'condition_name': 'Noise', 'sound_file': 'cafe_noise.wav', 'volume': 1},
      {'condition_name': 'Silence', 'sound_file': 'cafe_noise.wav', 'volume': 0},
      {'condition_name': 'Noise', 'sound_file': 'cafe_noise.wav', 'volume': 1},
      {'condition_name': 'Silence', 'sound_file': 'cafe_noise.wav', 'volume': 0},
      {'condition_name': 'Noise', 'sound_file': 'cafe_noise.wav', 'volume': 1},
      {'condition_name': 'Silence', 'sound_file': 'cafe_noise.wav', 'volume': 0},
      {'condition_name': 'Noise', 'sound_file': 'cafe_noise.wav', 'volume': 1},
      {'condition_name': 'Silence', 'sound_file': 'cafe_noise.wav', 'volume': 0},
      {'condition_name': 'Noise', 'sound_file': 'cafe_noise.wav', 'volume': 1},
      {'condition_name': 'Silence', 'sound_file': 'cafe_noise.wav', 'volume': 0},
      {'condition_name': 'Noise', 'sound_file': 'cafe_noise.wav', 'volume': 1},
      {'condition_name': 'Silence', 'sound_file': 'cafe_noise.wav', 'volume': 0},
      {'condition_name': 'Noise', 'sound_file': 'cafe_noise.wav', 'volume': 1},
      {'condition_name': 'Silence', 'sound_file': 'cafe_noise.wav', 'volume': 0},
      {'condition_name': 'Noise', 'sound_file': 'cafe_noise.wav', 'volume': 1},
      {'condition_name': 'Silence', 'sound_file': 'cafe_noise.wav', 'volume': 0},
      {'condition_name': 'Noise', 'sound_file': 'cafe_noise.wav', 'volume': 1}]
    Routine trial
  LoopTerminator main_loop
